---
API: 2.1
OpenSesame: 3.3.12
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "Extended template"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 24
set font_italic no
set font_family Arial
set font_bold no
set experiment_path "/Users/glengyel/Library/Mobile Documents/com~apple~CloudDocs/Projects/SNARC/analysis/Exp 10/script"
set disable_garbage_collection yes
set description "A template containing a practice and an experimental phase"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set bidi yes
set background gray

define form_text_display Elso_fo
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "Második feladat elkezdése"
	set margins "50;50;50;50"
	set form_title "Második feladat"
	__form_text__
	A feladatod ugyanaz lesz, mint a gyakorlásban, viszont hosszabb ideig fog tartani. Körülbelül fél órát fog igénybe venni. A feladat közben lesz két rövid szüneted, először, amikor végeztél a feladat egyharmadával, és másodszor, amikor már a feladat kétharmadával is végeztél.
	
	Tehát, egy számot fogsz látni a képernyő közepén fehér színben, ami egy idő múlva vagy piros vagy kék színűvé válik. 
	A feladatod az lesz, hogy nyomd meg a JOBB SHIFT billentyűt a billentyűzeten, ha a szám KÉK színű lett, míg a BAL SHIFT billentyűt, ha a szám PIROS színűvé vált.
	
	Most már nem fogsz visszajelzést hallani, ha elrontottad, ezért kérlek arra, hogy különösen figyelj a feladat közben. Próbálj meg egyszerre gyorsan és helyesen is válaszolni!
	Kattints rá alul a „második feladat elkezdése” gombra, ha készen állsz elkezdeni a második feladatot. 
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display Elso_fo_press
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "Második feladat elkezdése"
	set margins "50;50;50;50"
	set form_title "Második feladat"
	__form_text__
	A feladatod ugyanaz lesz, mint a gyakorlásban, viszont hosszabb ideig fog tartani. Körülbelül fél órát fog igénybe venni. A feladat közben lesz két rövid szüneted, először, amikor végeztél a feladat egyharmadával, és másodszor, amikor már a feladat kétharmadával is végeztél.
	
	Tehát, egy számot fogsz látni a képernyő közepén fehér színben, ami egy idő múlva vagy piros vagy kék színűvé válik. 
	A feladatod az lesz, hogy nyomd meg a JOBB SHIFT billentyűt a billentyűzeten, ha a szám KÉK színű lett, míg a BAL SHIFT billentyűt, ha a szám PIROS színűvé vált.
	
	Most már nem fogsz visszajelzést hallani, ha elrontottad, ezért kérlek arra, hogy különösen figyelj a feladat közben. Próbálj meg egyszerre gyorsan és helyesen is válaszolni!
	Kattints rá alul a „második feladat elkezdése” gombra, ha készen állsz elkezdeni a második feladatot. 
	                                
	                                Alaposan elolvastad?
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display Elso_gyakorlas
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "gyakorlás elkezdése"
	set margins "50;50;50;50"
	set form_title "Második feladat"
	__form_text__
	A második feladatodban egy számot fogsz látni a képernyő közepén fehér színben.
	
	A szám egy rövid idő múlva vagy piros vagy kék színűvé válik. 
	
	A feladatod az lesz, hogy nyomd meg a JOBB SHIFT billentyűt a billentyűzeten, ha a szám KÉK színű lett, míg a BAL SHIFT billentyűt, ha a szám PIROS színűvé vált.
	
	Keresd meg a JOBB és BAL SHIFT billentyűket a billentyűzeten és helyezd a kezedet a billentyűk fölé! A gyakorlás során próbálj meg egyszerre gyorsan és helyesen is válaszolni! Hanggal jelezzuk, ha rosszul válaszolsz.
	
	Kattints rá alul a „gyakorlás elkezdése” gombra, ha készen állsz a második feladat begyakorlására. 
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display Elso_gyakorlas_press
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "gyakorlás elkezdése"
	set margins "50;50;50;50"
	set form_title "Második feladat"
	__form_text__
	A második feladatodban egy számot fogsz látni a képernyő közepén fehér színben.
	
	A szám egy rövid idő múlva vagy piros vagy kék színűvé válik. 
	
	A feladatod az lesz, hogy nyomd meg a JOBB SHIFT billentyűt a billentyűzeten, ha a szám KÉK színű lett, míg a BAL SHIFT billentyűt, ha a szám PIROS színűvé vált.
	
	Keresd meg a JOBB és BAL SHIFT billentyűket a billentyűzeten és helyezd a kezedet a billentyűk fölé! A gyakorlás során próbálj meg egyszerre gyorsan és helyesen is válaszolni! Hanggal jelezzuk, ha rosszul válaszolsz.
	
	Kattints rá alul a „gyakorlás elkezdése” gombra, ha készen állsz a második feladat begyakorlására.   
	                           
	                                
	                                Alaposan elolvastad?
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display Harmadik_fo
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "utolsó feladat elkezdése"
	set margins "50;50;50;50"
	set form_title "Harmadik feladat"
	__form_text__
	A feladatod ugyanaz lesz, mint a gyakorlásban. Körülbelül 15 percet fog igénybe venni. A feladat közepén, ugyanúgy, mint a gyakorlásnál megcseréljük a válasz billentyűket. Kérlek mindig figyelj oda, hogy melyik billentyűvel kell helyesen válaszolnod!
	
	Az első körben a feladatod az lesz, hogy nyomd meg a JOBB SHIFT billentyűt a billentyűzeten, ha a szám PÁROS volt, míg a BAL SHIFT billentyűt, ha a szám PÁRATLAN volt.
	
	Most már nem fogsz visszajelzést hallani, ha elrontottad, ezért kérlek arra, hogy különösen figyelj a feladat közben. Próbálj meg egyszerre gyorsan és helyesen is válaszolni!
	
	Kattints rá alul az „utolsó feladat elkezdése” gombra, ha készen állsz elkezdeni az utolsó feladatot.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display Harmadik_fo_press
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "utolsó feladat elkezdése"
	set margins "50;50;50;50"
	set form_title "Harmadik feladat"
	__form_text__
	A feladatod ugyanaz lesz, mint a gyakorlásban. Körülbelül 15 percet fog igénybe venni. A feladat közepén, ugyanúgy, mint a gyakorlásnál megcseréljük a válasz billentyűket. Kérlek mindig figyelj oda, hogy melyik billentyűvel kell helyesen válaszolnod!
	
	Az első körben a feladatod az lesz, hogy nyomd meg a JOBB SHIFT billentyűt a billentyűzeten, ha a szám PÁROS volt, míg a BAL SHIFT billentyűt, ha a szám PÁRATLAN volt.
	
	Most már nem fogsz visszajelzést hallani, ha elrontottad, ezért kérlek arra, hogy különösen figyelj a feladat közben. Próbálj meg egyszerre gyorsan és helyesen is válaszolni!
	
	Kattints rá alul az „utolsó feladat elkezdése” gombra, ha készen állsz elkezdeni az utolsó feladatot.
	
	                                
	                                Alaposan elolvastad?
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display Harmadik_gyakorlas
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "gyakorlás elkezdése"
	set margins "50;50;50;50"
	set form_title "Harmadik feladat"
	__form_text__
	A harmadik feladatodban szintén egy számot fogsz látni a képernyő közepén fehér színben.
	
	Ebben a feladatban a szám színe nem változik. Neked azt kell eldönteni, hogy páros, vagy páratlan számot láttál. 
	A feladatod az lesz, hogy nyomd meg a JOBB SHIFT billentyűt a billentyűzeten, ha a szám PÁROS volt, míg a BAL SHIFT billentyűt, ha a szám PÁRATLAN volt.
	
	Ismét keresd meg a JOBB és BAL SHIFT billentyűket a billentyűzeten és helyezd a kezedet a billentyűk fölé! A gyakorlás során próbálj meg egyszerre gyorsan és helyesen is válaszolni! Hanggal jelezzuk, ha rosszul válaszolsz.
	
	Kattints rá alul a „gyakorlás elkezdése” gombra, ha készen állsz az utolsó feladat begyakorlására. 
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display Harmadik_gyakorlas_press
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "gyakorlás elkezdése"
	set margins "50;50;50;50"
	set form_title "Harmadik feladat"
	__form_text__
	A harmadik feladatodban szintén egy számot fogsz látni a képernyő közepén fehér színben.
	
	Ebben a feladatban a szám színe nem változik. Neked azt kell eldönteni, hogy páros, vagy páratlan számot láttál. 
	A feladatod az lesz, hogy nyomd meg a JOBB SHIFT billentyűt a billentyűzeten, ha a szám PÁROS volt, míg a BAL SHIFT billentyűt, ha a szám PÁRATLAN volt.
	
	Ismét keresd meg a JOBB és BAL SHIFT billentyűket a billentyűzeten és helyezd a kezedet a billentyűk fölé! A gyakorlás során próbálj meg egyszerre gyorsan és helyesen is válaszolni! Hanggal jelezzuk, ha rosszul válaszolsz.
	
	Kattints rá alul a „gyakorlás elkezdése” gombra, ha készen állsz az utolsó feladat begyakorlására. 
	
	                                
	                                Alaposan elolvastad?
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_input ID
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var ID_name
	set form_title "Azonosító"
	set form_question "Először add meg az azonosítódat, amit kitaláltál magadnak a kurzusra való jelentkezéskor!"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define sketchpad ITI
	set duration 1000
	set description "Displays stimuli"

define form_text_display Ismerteto
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "tovább"
	set margins "50;50;50;50"
	set form_title "Kísérlet ismertető"
	__form_text__
	A kísérletnek három része lesz. Mindhárom rész előtt leírjuk pontosan, hogy mi lesz a feladatod, valamint minden rész előtt gyakorolni fogod a kísérleti feladatot egy rövid gyakorló részben. A gyakorló részekben jelezni fogjuk, ha hibázol egy hang lejátszásával. A gyakorlások után a fő feladatokban már nem fogjuk jelezni hanggal, ha rosszul válaszolsz. 
	
	Ahhoz, hogy halljad a hangjelzést, kérlek kapcsold be a hangot a számítógépeden!
	Valamint, ha eddig nem tetted meg, lépj ki minden más programból, és a böngészőben csak ez az egy fül legyen nyitva, és ez legyen teljes képernyőre állítva!
	
	Kattints rá alul a „tovább” gombra, ha készen állsz elolvasni az első feladat leírását.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 1 3 1 label center=no text="[form_text]"


define form_text_display Ismerteto_press
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "tovább"
	set margins "50;50;50;50"
	set form_title "Kísérlet ismertető"
	__form_text__
	A kísérletnek három része lesz. Mindhárom rész előtt leírjuk pontosan, hogy mi lesz a feladatod, valamint minden rész előtt gyakorolni fogod a kísérleti feladatot egy rövid gyakorló részben. A gyakorló részekben jelezni fogjuk, ha hibázol egy hang lejátszásával. A gyakorlások után a fő feladatokban már nem fogjuk jelezni hanggal, ha rosszul válaszolsz. 
	
	Ahhoz, hogy halljad a hangjelzést, kérlek kapcsold be a hangot a számítógépeden!
	Valamint, ha eddig nem tetted meg, lépj ki minden más programból, és a böngészőben csak ez az egy fül legyen nyitva, és ez legyen teljes képernyőre állítva!
	
	Kattints rá alul a „tovább” gombra, ha készen állsz elolvasni az első feladat leírását.
	
	                                
	                                Alaposan elolvastad?
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display Masodik_fo
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "Első feladat elkezdése"
	set margins "50;50;50;50"
	set form_title "Első feladat"
	__form_text__
	A feladatod ugyanaz lesz, mint a gyakorlásban, viszont hosszabb ideig fog tartani. Ez is körülbelül fél órát fog igénybe venni. A feladat közben lesz két rövid szüneted, először, amikor végeztél a feladat egyharmadával, és másodszor, amikor már a feladat kétharmadával is végeztél.
	
	Tehát, egy ponthalmazt fogsz látni a képernyő közepén fehér színben, ami egy idő múlva vagy piros vagy kék színűvé válik. 
	A feladatod az lesz, hogy nyomd meg a JOBB SHIFT billentyűt a billentyűzeten, ha a ponthalmaz KÉK színű lett, míg a BAL SHIFT billentyűt, ha a ponthalmaz PIROS színűvé vált.
	
	Most már nem fogsz visszajelzést hallani, ha elrontottad, ezért kérlek arra, hogy különösen figyelj a feladat közben. Próbálj meg egyszerre gyorsan és helyesen is válaszolni!
	Kattints rá alul a „Első feladat elkezdése” gombra, ha készen állsz elkezdeni az első feladatot. 
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display Masodik_fo_press
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "Első feladat elkezdése"
	set margins "50;50;50;50"
	set form_title "Első feladat"
	__form_text__
	A feladatod ugyanaz lesz, mint a gyakorlásban, viszont hosszabb ideig fog tartani. Ez is körülbelül fél órát fog igénybe venni. A feladat közben lesz két rövid szüneted, először, amikor végeztél a feladat egyharmadával, és másodszor, amikor már a feladat kétharmadával is végeztél.
	
	Tehát, egy ponthalmazt fogsz látni a képernyő közepén fehér színben, ami egy idő múlva vagy piros vagy kék színűvé válik. 
	A feladatod az lesz, hogy nyomd meg a JOBB SHIFT billentyűt a billentyűzeten, ha a ponthalmaz KÉK színű lett, míg a BAL SHIFT billentyűt, ha a ponthalmaz PIROS színűvé vált.
	
	Most már nem fogsz visszajelzést hallani, ha elrontottad, ezért kérlek arra, hogy különösen figyelj a feladat közben. Próbálj meg egyszerre gyorsan és helyesen is válaszolni!
	Kattints rá alul a „Első feladat elkezdése” gombra, ha készen állsz elkezdeni az első feladatot. 
	
	                                
	                                Alaposan elolvastad?
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display Masodik_gyakorlas
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "gyakorlás elkezdése"
	set margins "50;50;50;50"
	set form_title "Első feladat"
	__form_text__
	Az első feladatodban egy ponthalmazt fogsz látni a képernyő közepén fehér színben. A ponthalmaz különböző számú, kisebb-nagyobb pontokból fog állni.
	
	A ponthalmaz egy rövid idő múlva vagy piros vagy kék színűvé válik. 
	A feladatod az lesz, hogy nyomd meg a JOBB SHIFT billentyűt a billentyűzeten, ha a ponthalmaz KÉK színű lett, míg a BAL SHIFT billentyűt, ha a ponthalmaz PIROS színűvé vált.
	
	Keresd meg a JOBB és BAL SHIFT billentyűket a billentyűzeten és helyezd a kezedet a billentyűk fölé! A gyakorlás során próbálj meg egyszerre gyorsan és helyesen is válaszolni! Hanggal jelezzuk, ha rosszul válaszolsz.
	
	Kattints rá alul a „gyakorlás elkezdése” gombra, ha készen állsz az első feladat begyakorlására. 
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display Masodik_gyakorlas_press
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "gyakorlás elkezdése"
	set margins "50;50;50;50"
	set form_title "Első feladat"
	__form_text__
	Az első feladatodban egy ponthalmazt fogsz látni a képernyő közepén fehér színben. A ponthalmaz különböző számú, kisebb-nagyobb pontokból fog állni.
	
	A ponthalmaz egy rövid idő múlva vagy piros vagy kék színűvé válik. 
	A feladatod az lesz, hogy nyomd meg a JOBB SHIFT billentyűt a billentyűzeten, ha a ponthalmaz KÉK színű lett, míg a BAL SHIFT billentyűt, ha a ponthalmaz PIROS színűvé vált.
	
	Keresd meg a JOBB és BAL SHIFT billentyűket a billentyűzeten és helyezd a kezedet a billentyűk fölé! A gyakorlás során próbálj meg egyszerre gyorsan és helyesen is válaszolni! Hanggal jelezzuk, ha rosszul válaszolsz.
	
	Kattints rá alul a „gyakorlás elkezdése” gombra, ha készen állsz az első feladat begyakorlására. 
	
	                                
	                                Alaposan elolvastad?
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sequence arabClassic_exp_trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run fixation_cross always
	run arab_javascript always
	run keyboard_response always
	run logger always
	run ITI always

define inline_javascript arabClassic_javascript
	set description "Executes JavaScript code"
	set _run "persistent.c1.show()"
	___prepare__
	persistent.c1 = draw_canvas()
	function draw_canvas() {
	    let canv = Canvas()
	    canv.font_size = 36
	    canv.font_family = 'arial'
	    draw_letter(canv)
	    return canv
	}
	
	function draw_letter(canv) {
	    canv.text({text: vars.number, color:'white'})
	    }
	__end__

define sequence arabClassic_practice_trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run fixation_cross always
	run arab_javascript always
	run keyboard_response always
	run logger always
	run error "[correct_keyboard_response] = 0"
	run ITI always

define loop arabClassic_resp1_exp_loop
	set source_file ""
	set source table
	set repeat 14
	set order random
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 number 1
	setcycle 0 correct_response LSHIFT
	setcycle 1 number 2
	setcycle 1 correct_response RSHIFT
	setcycle 2 number 3
	setcycle 2 correct_response LSHIFT
	setcycle 3 number 4
	setcycle 3 correct_response RSHIFT
	setcycle 4 number 6
	setcycle 4 correct_response RSHIFT
	setcycle 5 number 7
	setcycle 5 correct_response LSHIFT
	setcycle 6 number 8
	setcycle 6 correct_response RSHIFT
	setcycle 7 number 9
	setcycle 7 correct_response LSHIFT
	run arabClassic_exp_trial_sequence

define loop arabClassic_resp1_exp_loop_rev
	set source_file ""
	set source table
	set repeat 14
	set order random
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 number 1
	setcycle 0 correct_response RSHIFT
	setcycle 1 number 2
	setcycle 1 correct_response LSHIFT
	setcycle 2 number 3
	setcycle 2 correct_response RSHIFT
	setcycle 3 number 4
	setcycle 3 correct_response LSHIFT
	setcycle 4 number 6
	setcycle 4 correct_response LSHIFT
	setcycle 5 number 7
	setcycle 5 correct_response RSHIFT
	setcycle 6 number 8
	setcycle 6 correct_response LSHIFT
	setcycle 7 number 9
	setcycle 7 correct_response RSHIFT
	run arabClassic_exp_trial_sequence

define loop arabClassic_resp1_practice_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 number 1
	setcycle 0 correct_response LSHIFT
	setcycle 1 number 2
	setcycle 1 correct_response RSHIFT
	setcycle 2 number 3
	setcycle 2 correct_response LSHIFT
	setcycle 3 number 4
	setcycle 3 correct_response RSHIFT
	setcycle 4 number 6
	setcycle 4 correct_response RSHIFT
	setcycle 5 number 7
	setcycle 5 correct_response LSHIFT
	setcycle 6 number 8
	setcycle 6 correct_response RSHIFT
	setcycle 7 number 9
	setcycle 7 correct_response LSHIFT
	run arabClassic_practice_trial_sequence

define inline_javascript arab_col_javascript
	set description "Executes JavaScript code"
	___run__
	persistent.c.show()
	__end__
	___prepare__
	let col
	if (vars.color === 'red') {
	    col = 1
	} else if (vars.color === 'blue') {
	    col = 2
	}
	
	persistent.c = draw_canvas(col)
	
	function draw_canvas(col) {
	    let canv = Canvas()
	    canv.font_size = 36
	    canv.font_family = 'arial'
	    draw_letter(canv, col)
	    return canv
	}
	
	function draw_letter(canv, col) {
	    let currCol
	    if (col === 1) {
	    currCol = 'red'
	    } else if (col === 2) {
	    currCol = 'blue'
	    }
	    canv.text({text: vars.number, color: currCol})
	}
	__end__

define sequence arab_exp_trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run fixation_cross always
	run arab_javascript always
	run new_advanced_delay always
	run arab_col_javascript always
	run keyboard_response always
	run logger always
	run ITI always

define sequence arab_exp_trial_sequence_1
	set flush_keyboard yes
	set description "A single trial"
	run fixation_cross always
	run arabClassic_javascript always
	run new_advanced_delay always
	run arab_col_javascript always
	run keyboard_response always
	run logger always
	run ITI always

define sequence arab_exp_trial_sequence_2
	set flush_keyboard yes
	set description "A single trial"
	run fixation_cross always
	run arab_javascript always
	run new_advanced_delay always
	run arab_col_javascript always
	run keyboard_response always
	run logger always
	run ITI always

define inline_javascript arab_javascript
	set description "Executes JavaScript code"
	set _run "persistent.c1.show()"
	___prepare__
	persistent.c1 = draw_canvas()
	
	function draw_canvas() {
	    let canv = Canvas()
	    canv.font_size = 36
	    canv.font_family = 'arial'
	    draw_letter(canv)
	    return canv
	}
	
	function draw_letter(canv) {
	    canv.text({text: vars.number, color:'white'})
	    }
	__end__

define sequence arab_practice_trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run fixation_cross always
	run arab_javascript always
	run new_advanced_delay always
	run arab_col_javascript always
	run keyboard_response always
	run logger always
	run error "[correct_keyboard_response] = 0"
	run ITI always

define loop arab_resp1_exp_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 10
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 16
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 color red
	setcycle 0 number 1
	setcycle 0 correct_response LSHIFT
	setcycle 1 color blue
	setcycle 1 number 1
	setcycle 1 correct_response RSHIFT
	setcycle 2 color red
	setcycle 2 number 2
	setcycle 2 correct_response LSHIFT
	setcycle 3 color blue
	setcycle 3 number 2
	setcycle 3 correct_response RSHIFT
	setcycle 4 color red
	setcycle 4 number 3
	setcycle 4 correct_response LSHIFT
	setcycle 5 color blue
	setcycle 5 number 3
	setcycle 5 correct_response RSHIFT
	setcycle 6 color red
	setcycle 6 number 4
	setcycle 6 correct_response LSHIFT
	setcycle 7 color blue
	setcycle 7 number 4
	setcycle 7 correct_response RSHIFT
	setcycle 8 color red
	setcycle 8 number 6
	setcycle 8 correct_response LSHIFT
	setcycle 9 color blue
	setcycle 9 number 6
	setcycle 9 correct_response RSHIFT
	setcycle 10 color red
	setcycle 10 number 7
	setcycle 10 correct_response LSHIFT
	setcycle 11 color blue
	setcycle 11 number 7
	setcycle 11 correct_response RSHIFT
	setcycle 12 color red
	setcycle 12 number 8
	setcycle 12 correct_response LSHIFT
	setcycle 13 color blue
	setcycle 13 number 8
	setcycle 13 correct_response RSHIFT
	setcycle 14 color red
	setcycle 14 number 9
	setcycle 14 correct_response LSHIFT
	setcycle 15 color blue
	setcycle 15 number 9
	setcycle 15 correct_response RSHIFT
	run arab_exp_trial_sequence

define loop arab_resp1_exp_loop_1
	set source_file ""
	set source table
	set skip 0
	set repeat 10
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 16
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 color red
	setcycle 0 number 1
	setcycle 0 correct_response LSHIFT
	setcycle 1 color blue
	setcycle 1 number 1
	setcycle 1 correct_response RSHIFT
	setcycle 2 color red
	setcycle 2 number 2
	setcycle 2 correct_response LSHIFT
	setcycle 3 color blue
	setcycle 3 number 2
	setcycle 3 correct_response RSHIFT
	setcycle 4 color red
	setcycle 4 number 3
	setcycle 4 correct_response LSHIFT
	setcycle 5 color blue
	setcycle 5 number 3
	setcycle 5 correct_response RSHIFT
	setcycle 6 color red
	setcycle 6 number 4
	setcycle 6 correct_response LSHIFT
	setcycle 7 color blue
	setcycle 7 number 4
	setcycle 7 correct_response RSHIFT
	setcycle 8 color red
	setcycle 8 number 6
	setcycle 8 correct_response LSHIFT
	setcycle 9 color blue
	setcycle 9 number 6
	setcycle 9 correct_response RSHIFT
	setcycle 10 color red
	setcycle 10 number 7
	setcycle 10 correct_response LSHIFT
	setcycle 11 color blue
	setcycle 11 number 7
	setcycle 11 correct_response RSHIFT
	setcycle 12 color red
	setcycle 12 number 8
	setcycle 12 correct_response LSHIFT
	setcycle 13 color blue
	setcycle 13 number 8
	setcycle 13 correct_response RSHIFT
	setcycle 14 color red
	setcycle 14 number 9
	setcycle 14 correct_response LSHIFT
	setcycle 15 color blue
	setcycle 15 number 9
	setcycle 15 correct_response RSHIFT
	run arab_exp_trial_sequence_1

define loop arab_resp1_exp_loop_2
	set source_file ""
	set source table
	set skip 0
	set repeat 10
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 16
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 color red
	setcycle 0 number 1
	setcycle 0 correct_response LSHIFT
	setcycle 1 color blue
	setcycle 1 number 1
	setcycle 1 correct_response RSHIFT
	setcycle 2 color red
	setcycle 2 number 2
	setcycle 2 correct_response LSHIFT
	setcycle 3 color blue
	setcycle 3 number 2
	setcycle 3 correct_response RSHIFT
	setcycle 4 color red
	setcycle 4 number 3
	setcycle 4 correct_response LSHIFT
	setcycle 5 color blue
	setcycle 5 number 3
	setcycle 5 correct_response RSHIFT
	setcycle 6 color red
	setcycle 6 number 4
	setcycle 6 correct_response LSHIFT
	setcycle 7 color blue
	setcycle 7 number 4
	setcycle 7 correct_response RSHIFT
	setcycle 8 color red
	setcycle 8 number 6
	setcycle 8 correct_response LSHIFT
	setcycle 9 color blue
	setcycle 9 number 6
	setcycle 9 correct_response RSHIFT
	setcycle 10 color red
	setcycle 10 number 7
	setcycle 10 correct_response LSHIFT
	setcycle 11 color blue
	setcycle 11 number 7
	setcycle 11 correct_response RSHIFT
	setcycle 12 color red
	setcycle 12 number 8
	setcycle 12 correct_response LSHIFT
	setcycle 13 color blue
	setcycle 13 number 8
	setcycle 13 correct_response RSHIFT
	setcycle 14 color red
	setcycle 14 number 9
	setcycle 14 correct_response LSHIFT
	setcycle 15 color blue
	setcycle 15 number 9
	setcycle 15 correct_response RSHIFT
	run arab_exp_trial_sequence_2

define loop arab_resp1_practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 16
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 color red
	setcycle 0 number 1
	setcycle 0 correct_response LSHIFT
	setcycle 1 color blue
	setcycle 1 number 1
	setcycle 1 correct_response RSHIFT
	setcycle 2 color red
	setcycle 2 number 2
	setcycle 2 correct_response LSHIFT
	setcycle 3 color blue
	setcycle 3 number 2
	setcycle 3 correct_response RSHIFT
	setcycle 4 color red
	setcycle 4 number 3
	setcycle 4 correct_response LSHIFT
	setcycle 5 color blue
	setcycle 5 number 3
	setcycle 5 correct_response RSHIFT
	setcycle 6 color red
	setcycle 6 number 4
	setcycle 6 correct_response LSHIFT
	setcycle 7 color blue
	setcycle 7 number 4
	setcycle 7 correct_response RSHIFT
	setcycle 8 color red
	setcycle 8 number 6
	setcycle 8 correct_response LSHIFT
	setcycle 9 color blue
	setcycle 9 number 6
	setcycle 9 correct_response RSHIFT
	setcycle 10 color red
	setcycle 10 number 7
	setcycle 10 correct_response LSHIFT
	setcycle 11 color blue
	setcycle 11 number 7
	setcycle 11 correct_response RSHIFT
	setcycle 12 color red
	setcycle 12 number 8
	setcycle 12 correct_response LSHIFT
	setcycle 13 color blue
	setcycle 13 number 8
	setcycle 13 correct_response RSHIFT
	setcycle 14 color red
	setcycle 14 number 9
	setcycle 14 correct_response LSHIFT
	setcycle 15 color blue
	setcycle 15 number 9
	setcycle 15 correct_response RSHIFT
	run arab_practice_trial_sequence

define loop arab_resp1_practice_loop_rev
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 number 1
	setcycle 0 correct_response RSHIFT
	setcycle 1 number 2
	setcycle 1 correct_response LSHIFT
	setcycle 2 number 3
	setcycle 2 correct_response RSHIFT
	setcycle 3 number 4
	setcycle 3 correct_response LSHIFT
	setcycle 4 number 6
	setcycle 4 correct_response LSHIFT
	setcycle 5 number 7
	setcycle 5 correct_response RSHIFT
	setcycle 6 number 8
	setcycle 6 correct_response LSHIFT
	setcycle 7 number 9
	setcycle 7 correct_response RSHIFT
	run arabClassic_practice_trial_sequence

define inline_javascript dot_col_javascript
	set description "Executes JavaScript code"
	___run__
	persistent.c3.show()
	__end__
	___prepare__
	let col
	if (vars.color === 'red') {
	    col = 1
	} else if (vars.color === 'blue') {
	    col = 2
	}
	
	persistent.c3 = draw_canvas(col, persistent.xy_list, persistent.SIZE)
	
	function draw_canvas(col, xy, size) {
	    let canv = Canvas()
	    //let xy_list = xy_random(vars.number*5, 500, 500, 25)
	    
	    // for (let [x, y] of xy_list) {
	    //     draw_dots(canv, x, y, col)
	    // }
	    for (var i in xy) {
	        var x = xy[i][0]
	        var y = xy[i][1]
	        draw_dots(canv, x, y, col, size)
	}
	   
	    return canv
	}
	
	function draw_dots(canv, x, y, col, size) {
	    let currCol
	    if (col === 1) {
	    currCol = 'red'
	    } else if (col === 2) {
	    currCol = 'blue'
	    }
	    canv.circle({x:x, y:y, r:size, color:currCol, fill:true})
	}
	__end__

define sequence dot_exp_trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run fixation_cross always
	run dot_javascript always
	run new_advanced_delay always
	run dot_col_javascript always
	run keyboard_response always
	run logger always
	run ITI always

define sequence dot_exp_trial_sequence_1
	set flush_keyboard yes
	set description "A single trial"
	run fixation_cross always
	run dot_javascript always
	run new_advanced_delay always
	run dot_col_javascript always
	run keyboard_response always
	run logger always
	run ITI always

define sequence dot_exp_trial_sequence_2
	set flush_keyboard yes
	set description "A single trial"
	run fixation_cross always
	run dot_javascript always
	run new_advanced_delay always
	run dot_col_javascript always
	run keyboard_response always
	run logger always
	run ITI always

define inline_javascript dot_javascript
	set description "Executes JavaScript code"
	___run__
	persistent.c2.show()
	__end__
	___prepare__
	let multipl
	multipl = 5
	let num
	num = vars.number * multipl
	let TotalSurface
	TotalSurface = 150
	let minDistance
	minDistance = 8
	let scaleDistance
	scaleDistance = 20
	let size
	size = (TotalSurface / num) * 0.75
	let distance
	distance = scaleDistance * (size / num)  + minDistance
	let scaleDistance2
	scaleDistance2 = 0.6
	if (vars.number === 1) {
	    distance = distance * scaleDistance2
	}
	
	persistent.xy_list = xy_random(num, TotalSurface, TotalSurface, distance)
	persistent.c2 = draw_canvas(persistent.xy_list, size)
	persistent.SIZE = size
	function draw_canvas(xy, size) {
	    let canv = Canvas()
	    
	    // for (let [x, y] of xy_list) {
	    //     draw_dots(canv, x, y)
	    // }
	
	    for (var i in xy) {
	      var x = xy[i][0]
	      var y = xy[i][1]
	      draw_dots(canv, x, y, size)
	    }
	
	    return canv
	}
	
	function draw_dots(canv, x, y, size) {
	    canv.circle({x:x, y:y, r:size, color:'white', fill:true})
	}
	__end__

define sequence dot_practice_trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run fixation_cross always
	run dot_javascript always
	run new_advanced_delay always
	run dot_col_javascript always
	run keyboard_response always
	run logger always
	run error "[correct_keyboard_response] = 0"
	run ITI always

define loop dot_resp1_exp_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 10
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 16
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 color red
	setcycle 0 number 1
	setcycle 0 correct_response LSHIFT
	setcycle 1 color blue
	setcycle 1 number 1
	setcycle 1 correct_response RSHIFT
	setcycle 2 color red
	setcycle 2 number 2
	setcycle 2 correct_response LSHIFT
	setcycle 3 color blue
	setcycle 3 number 2
	setcycle 3 correct_response RSHIFT
	setcycle 4 color red
	setcycle 4 number 3
	setcycle 4 correct_response LSHIFT
	setcycle 5 color blue
	setcycle 5 number 3
	setcycle 5 correct_response RSHIFT
	setcycle 6 color red
	setcycle 6 number 4
	setcycle 6 correct_response LSHIFT
	setcycle 7 color blue
	setcycle 7 number 4
	setcycle 7 correct_response RSHIFT
	setcycle 8 color red
	setcycle 8 number 6
	setcycle 8 correct_response LSHIFT
	setcycle 9 color blue
	setcycle 9 number 6
	setcycle 9 correct_response RSHIFT
	setcycle 10 color red
	setcycle 10 number 7
	setcycle 10 correct_response LSHIFT
	setcycle 11 color blue
	setcycle 11 number 7
	setcycle 11 correct_response RSHIFT
	setcycle 12 color red
	setcycle 12 number 8
	setcycle 12 correct_response LSHIFT
	setcycle 13 color blue
	setcycle 13 number 8
	setcycle 13 correct_response RSHIFT
	setcycle 14 color red
	setcycle 14 number 9
	setcycle 14 correct_response LSHIFT
	setcycle 15 color blue
	setcycle 15 number 9
	setcycle 15 correct_response RSHIFT
	run dot_exp_trial_sequence

define loop dot_resp1_exp_loop_1
	set source_file ""
	set source table
	set skip 0
	set repeat 10
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 16
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 color red
	setcycle 0 number 1
	setcycle 0 correct_response LSHIFT
	setcycle 1 color blue
	setcycle 1 number 1
	setcycle 1 correct_response RSHIFT
	setcycle 2 color red
	setcycle 2 number 2
	setcycle 2 correct_response LSHIFT
	setcycle 3 color blue
	setcycle 3 number 2
	setcycle 3 correct_response RSHIFT
	setcycle 4 color red
	setcycle 4 number 3
	setcycle 4 correct_response LSHIFT
	setcycle 5 color blue
	setcycle 5 number 3
	setcycle 5 correct_response RSHIFT
	setcycle 6 color red
	setcycle 6 number 4
	setcycle 6 correct_response LSHIFT
	setcycle 7 color blue
	setcycle 7 number 4
	setcycle 7 correct_response RSHIFT
	setcycle 8 color red
	setcycle 8 number 6
	setcycle 8 correct_response LSHIFT
	setcycle 9 color blue
	setcycle 9 number 6
	setcycle 9 correct_response RSHIFT
	setcycle 10 color red
	setcycle 10 number 7
	setcycle 10 correct_response LSHIFT
	setcycle 11 color blue
	setcycle 11 number 7
	setcycle 11 correct_response RSHIFT
	setcycle 12 color red
	setcycle 12 number 8
	setcycle 12 correct_response LSHIFT
	setcycle 13 color blue
	setcycle 13 number 8
	setcycle 13 correct_response RSHIFT
	setcycle 14 color red
	setcycle 14 number 9
	setcycle 14 correct_response LSHIFT
	setcycle 15 color blue
	setcycle 15 number 9
	setcycle 15 correct_response RSHIFT
	run dot_exp_trial_sequence_1

define loop dot_resp1_exp_loop_2
	set source_file ""
	set source table
	set skip 0
	set repeat 10
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 16
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 color red
	setcycle 0 number 1
	setcycle 0 correct_response LSHIFT
	setcycle 1 color blue
	setcycle 1 number 1
	setcycle 1 correct_response RSHIFT
	setcycle 2 color red
	setcycle 2 number 2
	setcycle 2 correct_response LSHIFT
	setcycle 3 color blue
	setcycle 3 number 2
	setcycle 3 correct_response RSHIFT
	setcycle 4 color red
	setcycle 4 number 3
	setcycle 4 correct_response LSHIFT
	setcycle 5 color blue
	setcycle 5 number 3
	setcycle 5 correct_response RSHIFT
	setcycle 6 color red
	setcycle 6 number 4
	setcycle 6 correct_response LSHIFT
	setcycle 7 color blue
	setcycle 7 number 4
	setcycle 7 correct_response RSHIFT
	setcycle 8 color red
	setcycle 8 number 6
	setcycle 8 correct_response LSHIFT
	setcycle 9 color blue
	setcycle 9 number 6
	setcycle 9 correct_response RSHIFT
	setcycle 10 color red
	setcycle 10 number 7
	setcycle 10 correct_response LSHIFT
	setcycle 11 color blue
	setcycle 11 number 7
	setcycle 11 correct_response RSHIFT
	setcycle 12 color red
	setcycle 12 number 8
	setcycle 12 correct_response LSHIFT
	setcycle 13 color blue
	setcycle 13 number 8
	setcycle 13 correct_response RSHIFT
	setcycle 14 color red
	setcycle 14 number 9
	setcycle 14 correct_response LSHIFT
	setcycle 15 color blue
	setcycle 15 number 9
	setcycle 15 correct_response RSHIFT
	run dot_exp_trial_sequence_2

define loop dot_resp1_practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 16
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 color red
	setcycle 0 number 1
	setcycle 0 correct_response LSHIFT
	setcycle 1 color blue
	setcycle 1 number 1
	setcycle 1 correct_response RSHIFT
	setcycle 2 color red
	setcycle 2 number 2
	setcycle 2 correct_response LSHIFT
	setcycle 3 color blue
	setcycle 3 number 2
	setcycle 3 correct_response RSHIFT
	setcycle 4 color red
	setcycle 4 number 3
	setcycle 4 correct_response LSHIFT
	setcycle 5 color blue
	setcycle 5 number 3
	setcycle 5 correct_response RSHIFT
	setcycle 6 color red
	setcycle 6 number 4
	setcycle 6 correct_response LSHIFT
	setcycle 7 color blue
	setcycle 7 number 4
	setcycle 7 correct_response RSHIFT
	setcycle 8 color red
	setcycle 8 number 6
	setcycle 8 correct_response LSHIFT
	setcycle 9 color blue
	setcycle 9 number 6
	setcycle 9 correct_response RSHIFT
	setcycle 10 color red
	setcycle 10 number 7
	setcycle 10 correct_response LSHIFT
	setcycle 11 color blue
	setcycle 11 number 7
	setcycle 11 correct_response RSHIFT
	setcycle 12 color red
	setcycle 12 number 8
	setcycle 12 correct_response LSHIFT
	setcycle 13 color blue
	setcycle 13 number 8
	setcycle 13 correct_response RSHIFT
	setcycle 14 color red
	setcycle 14 number 9
	setcycle 14 correct_response LSHIFT
	setcycle 15 color blue
	setcycle 15 number 9
	setcycle 15 correct_response RSHIFT
	run dot_practice_trial_sequence

define sketchpad end_of_exp
	set duration 2000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Gratulálok!<br /><br />Teljesítetted az egész kísérletet.<br /><br />Köszönöm szépen a részvételedet! <br /><br />Nyomj meg bármilyen billentyűt a kilepéshez!<br />" x=0 y=0 z_index=0

define sketchpad end_of_exp_1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Gratulálok!<br /><br />Teljesítetted az egész kísérletet.<br /><br />Köszönöm szépen a részvételedet! <br /><br />Nyomj meg bármilyen billentyűt a kilepéshez!<br />" x=0 y=0 z_index=0

define sketchpad end_of_first_condition
	set duration 5000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Gratulálok!<br /><br />Teljesítetted a feladat egyharmadát. Most tarthatsz egy kis szünetet. <br /><br />Nyomj meg bármilyen billentyűt, ha készen állsz a feladat folytatására.<br />" x=0 y=0 z_index=0

define sketchpad end_of_first_condition_1
	set duration 5000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Gratulálok!<br /><br />Teljesítetted a feladat kétharmadát. Most tarthatsz egy kis szünetet. <br /><br />Nyomj meg bármilyen billentyűt, ha készen állsz a feladat folytatására.<br />" x=0 y=0 z_index=0

define sketchpad end_of_first_condition_1_press
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Gratulálok!<br /><br />Teljesítetted a feladat kétharmadát. Most tarthatsz egy kis szünetet. <br /><br />Nyomj meg bármilyen billentyűt, ha készen állsz a feladat folytatására.<br />" x=0 y=0 z_index=0

define sketchpad end_of_first_condition_2
	set duration 5000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Gratulálok!<br /><br />Teljesítetted a második feladatot.<br /><br />Nyomj meg bármilyen billentyűt, ha készen állsz elolvasni a harmadik feladat leírását!<br />" x=0 y=0 z_index=0

define sketchpad end_of_first_condition_2_press
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Gratulálok!<br /><br />Teljesítetted a második feladatot.<br /><br />Nyomj meg bármilyen billentyűt, ha készen állsz elolvasni a harmadik feladat leírását!<br />" x=0 y=0 z_index=0

define sketchpad end_of_first_condition_press
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Gratulálok!<br /><br />Teljesítetted a feladat egyharmadát. Most tarthatsz egy kis szünetet. <br /><br />Nyomj meg bármilyen billentyűt, ha készen állsz a feladat folytatására.<br />" x=0 y=0 z_index=0

define sketchpad end_of_second_condition_2
	set duration 5000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Gratulálok!<br /><br />Teljesítetted az első feladatot.<br /><br />Nyomj meg bármilyen billentyűt, ha készen állsz elolvasni a második feladat leírását!<br />" x=0 y=0 z_index=0

define sketchpad end_of_second_condition_2_press
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Gratulálok!<br /><br />Teljesítetted az első feladatot.<br /><br />Nyomj meg bármilyen billentyűt, ha készen állsz elolvasni a második feladat leírását!<br />" x=0 y=0 z_index=0

define sketchpad end_of_third_condition_classic
	set duration 5000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Gratulálok!<br /><br />Teljesítetted a feladat felét. <br /><br />Most megfordítjuk a válasz billentyűket!<br />Tehát, mostantól a feladatod az lesz,<br />hogy nyomd meg a BAL SHIFT billentyűt a billentyűzeten, ha a szám páros volt,<br />míg a JOBB SHIFT billentyűt, ha a szám páratlan volt.<br /><br />Nyomj meg bármilyen billentyűt,<br />ha készen állsz a fordított válasz billentyűkkel a feladat folytatására.<br />" x=0 y=0 z_index=0

define sketchpad end_of_third_condition_classic_press
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Gratulálok!<br /><br />Teljesítetted a feladat felét. <br /><br />Most megfordítjuk a válasz billentyűket!<br />Tehát, mostantól a feladatod az lesz,<br />hogy nyomd meg a BAL SHIFT billentyűt a billentyűzeten, ha a szám páros volt,<br />míg a JOBB SHIFT billentyűt, ha a szám páratlan volt.<br /><br />Nyomj meg bármilyen billentyűt,<br />ha készen állsz a fordított válasz billentyűkkel a feladat folytatására.<br />" x=0 y=0 z_index=0

define sampler error
	set volume 1
	set stop_after 0
	set sample "err_out(2).wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sequence exp_classic
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run arabClassic_resp1_exp_loop always

define sequence exp_classic_rev
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run arabClassic_resp1_exp_loop_rev always

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run ID always
	run Ismerteto always
	run Ismerteto_press always
	run Masodik_gyakorlas always
	run Masodik_gyakorlas_press always
	run practice_loop_notation_order2 always
	run Masodik_fo always
	run Masodik_fo_press always
	run experimental_loop_notation_order2 always
	run end_of_first_condition always
	run end_of_first_condition_press always
	run experimental_loop_notation_order2_1 always
	run end_of_first_condition_1 always
	run end_of_first_condition_1_press always
	run experimental_loop_notation_order2_2 always
	run end_of_second_condition_2 always
	run end_of_second_condition_2_press always
	run Elso_gyakorlas always
	run Elso_gyakorlas_press always
	run practice_loop_notation_order1 always
	run Elso_fo always
	run Elso_fo_press always
	run experimental_loop_notation_order1 always
	run end_of_first_condition always
	run end_of_first_condition_press always
	run experimental_loop_notation_order1_1 always
	run end_of_first_condition_1 always
	run end_of_first_condition_1_press always
	run experimental_loop_notation_order1_2 always
	run end_of_first_condition_2 always
	run end_of_first_condition_2_press always
	run Harmadik_gyakorlas always
	run Harmadik_gyakorlas_press always
	run practice_loop_classic_order1 always
	run practice_loop_classic_order1_rev always
	run Harmadik_fo always
	run Harmadik_fo_press always
	run experimental_loop_classic_order1 always
	run end_of_third_condition_classic always
	run end_of_third_condition_classic_press always
	run experimental_loop_classic_order1_rev always
	run end_of_exp always
	run end_of_exp_1 always

define sequence experiment_block_1st_notation
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run arab_resp1_exp_loop always

define sequence experiment_block_1st_notation_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run arab_resp1_exp_loop_1 always

define sequence experiment_block_1st_notation_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run arab_resp1_exp_loop_2 always

define sequence experiment_block_2nd_notation
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run dot_resp1_exp_loop always

define sequence experiment_block_2nd_notation_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run dot_resp1_exp_loop_1 always

define sequence experiment_block_2nd_notation_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run dot_resp1_exp_loop_2 always

define loop experimental_loop_classic_order1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	setcycle 0 condition classic
	setcycle 0 block 2
	run exp_classic

define loop experimental_loop_classic_order1_rev
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	setcycle 0 condition classic
	setcycle 0 block 3
	run exp_classic_rev

define loop experimental_loop_notation_order1
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	setcycle 0 condition arab
	setcycle 0 block 1
	run experiment_block_1st_notation

define loop experimental_loop_notation_order1_1
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	setcycle 0 condition arab
	setcycle 0 block 2
	run experiment_block_1st_notation_1

define loop experimental_loop_notation_order1_2
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	setcycle 0 condition arab
	setcycle 0 block 3
	run experiment_block_1st_notation_2

define loop experimental_loop_notation_order2
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	setcycle 0 condition dot
	setcycle 0 block 1
	run experiment_block_2nd_notation

define loop experimental_loop_notation_order2_1
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	setcycle 0 condition dot
	setcycle 0 block 2
	run experiment_block_2nd_notation_1

define loop experimental_loop_notation_order2_2
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	setcycle 0 condition dot
	setcycle 0 block 3
	run experiment_block_2nd_notation_2

define feedback feedback
	set reset_variables yes
	set duration 5000
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Gratulálok!<br /><br />Átlagosan [avg_rt] milliszekundum alatt válaszoltál, és [acc] százalékban hoztál helyes választ.<br /><br />Nyomj meg bármilyen billentyűt, ha készen állsz elolvasni a fő feladat leírását!<br />" x=0 y=0 z_index=0

define feedback feedback_1
	set reset_variables yes
	set duration 5000
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Gratulálok!<br /><br />Átlagosan [avg_rt] milliszekundum alatt válaszoltál, és [acc] százalékban hoztál helyes választ.<br /><br />Most megfordítjuk a válasz billentyűket! <br />Tehát, mostantól a feladatod az lesz,<br />hogy nyomd meg a BAL SHIFT billentyűt a billentyűzeten, ha a szám páros volt,<br />míg a JOBB SHIFT billentyűt, ha a szám páratlan volt.<br /><br />Nyomj meg bármilyen billentyűt, ha készen állsz a fordított válasz billentyűk gyakorlására!<br />" x=0 y=0 z_index=0

define feedback feedback_1_press
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Gratulálok!<br /><br />Átlagosan [avg_rt] milliszekundum alatt válaszoltál, és [acc] százalékban hoztál helyes választ.<br /><br />Most megfordítjuk a válasz billentyűket! <br />Tehát, mostantól a feladatod az lesz,<br />hogy nyomd meg a BAL SHIFT billentyűt a billentyűzeten, ha a szám páros volt,<br />míg a JOBB SHIFT billentyűt, ha a szám páratlan volt.<br /><br />Nyomj meg bármilyen billentyűt, ha készen állsz a fordított válasz billentyűk gyakorlására!<br />" x=0 y=0 z_index=0

define feedback feedback_press
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Gratulálok!<br /><br />Átlagosan [avg_rt] milliszekundum alatt válaszoltál, és [acc] százalékban hoztál helyes választ.<br /><br />Nyomj meg bármilyen billentyűt, ha készen állsz elolvasni a fő feladat leírását!<br />" x=0 y=0 z_index=0

define sketchpad fixation_cross
	set start_response_interval no
	set duration 500
	set description "Displays stimuli"
	draw line color=white penwidth=6 show_if=always x1=0 x2=0 y1=-25 y2=25 z_index=0
	draw line color=white penwidth=6 show_if=always x1=-25 x2=25 y1=0 y2=0 z_index=0

define keyboard_response keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "RSHIFT;LSHIFT"

define logger logger
	set description "Logs experimental data"
	set auto_log no
	log number
	log color
	log subject_nr
	log response_time_keyboard_response
	log practice
	log correct_keyboard_response
	log response_keyboard_response
	log ID_name
	log condition
	log block

define advanced_delay new_advanced_delay
	set jitter_mode Uniform
	set jitter 0
	set duration 400
	set description "Waits for a specified duration"

define sequence practice_block_1st_notation
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run reset_feedback always
	run arab_resp1_practice_loop always
	run feedback always
	run feedback_press always

define sequence practice_block_2nd_notation
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run reset_feedback always
	run dot_resp1_practice_loop always
	run feedback always
	run feedback_press always

define sequence practice_classic
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run reset_feedback always
	run arabClassic_resp1_practice_loop always
	run feedback_1 always
	run feedback_1_press always

define sequence practice_classic_rev
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run reset_feedback always
	run arab_resp1_practice_loop_rev always
	run feedback always
	run feedback_press always

define loop practice_loop_classic_order1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	setcycle 0 condition classic
	setcycle 0 block 0
	run practice_classic

define loop practice_loop_classic_order1_rev
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	setcycle 0 condition classic
	setcycle 0 block 1
	run practice_classic_rev

define loop practice_loop_notation_order1
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	setcycle 0 condition arab
	setcycle 0 block 0
	run practice_block_1st_notation

define loop practice_loop_notation_order2
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	setcycle 0 condition dot
	setcycle 0 block 0
	run practice_block_2nd_notation

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

